# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: ZI MFLI AUX output

# The version string should be updated whenever changes are made to this config file
version: 0.9

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: ZI_MFLI_AUX_output



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: MFLI

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
[outputform]
datatype: COMBO
unit: -
def_value: OUTPUTFORM_HORN
combo_def_1: OUTPUTFORM_HORN
combo_def_2: OUTPUTFORM_PEAK
combo_def_3: OUTPUTFORM_STEP
permission:  BOTH
group: Control
section: Control

[Voltage]
label: AUX output
datatype: DOUBLE
unit: dummyV
permission: BOTH
def_value: 0.0
group: Output
section: Output
# get_cmd: /%s/sigouts/0/offset
# set_cmd: S<*> E
# sweep_cmd: M1 PI<st> SW<st> PRS S<*> PRE RU2
# stop_cmd: RU0
# get_cmd: H0 OD
# state_quant: Function
# state_value_1: Voltage

# [SigOut1Offset]
# label: Signal Out 1 Offset
# datatype: DOUBLE
# unit: V
# sweep_cmd: ***REPEAT SET***
# group: Signal Output 1
# section: Signal Output
# get_cmd: /%s/sigouts/0/offset

