# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: ZI MFLI Lock-in
# The version string should be updated whenever changes are made to this config file
version: 0.9

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: ZI_MFLI_Lockin



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: MFLI



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
[outputform]
datatype: COMBO
unit: -
def_value: OUTPUTFORM_HORN
combo_def_1: OUTPUTFORM_HORN
combo_def_2: OUTPUTFORM_PEAK
combo_def_3: OUTPUTFORM_STEP
permission:  BOTH
group: Output_Control
section: Output_Control

[Voltage]
label: AUX output
datatype: DOUBLE
unit: dummyV
permission: BOTH
def_value: 0.0
group: Output
section: Output

[range]
label: MFLI Input Range
datatype: DOUBLE
def_value: 0.1
unit: V
permission: BOTH
group: Measurement_Control
section: Measurement_Control

[criterion]
datatype: COMBO
def_value: CriterionSimple
combo_def_1: CriterionSimple
combo_def_2: CriterionOne
combo_def_3: CriterionLogging
permission:  BOTH
group: Measurement_Control
section: Measurement_Control

[measure_loopback]
datatype: BOOLEAN
def_value: False
permission:  BOTH
group: Measurement_Control
section: Measurement_Control

[trash_previous_samples]
datatype: BOOLEAN
def_value: True
permission:  BOTH
group: Measurement_Control
section: Measurement_Control

[logging_save_file]
label: Save logfile (pickle file in driver-folder)
datatype: BUTTON
permission:  WRITE
group: Measurement_Control
section: Measurement_Control

[quality]
datatype: DOUBLE
unit: Measurement Quality
permission: READ
group: Measurement
section: Measurement

[X]
datatype: DOUBLE
unit: V
permission: READ
group: Measurement
section: Measurement

[Y]
datatype: DOUBLE
unit: V
permission: READ
group: Measurement
section: Measurement

[R]
datatype: DOUBLE
unit: V
permission: READ
group: Measurement
section: Measurement

[theta]
datatype: DOUBLE
unit: rad
permission: READ
group: Measurement
section: Measurement
